PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1280, 800]
  expName = maxForce
  keyboardBackend = PsychToolbox
  logging level = debug
  runMode = 1
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Routines
  Routine countdown
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    ApparatusLEDComponent countdown_led plugin="psychopy-apparatus"
      deviceLabel = apparatus
      holeColor = black
      holes = 'none'
      startVal [time (s)] = 0
      syncScreenRefresh = False
      turnOffOnRoutineEnd = False
      turnOffOnStop = False
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    CodeComponent countdown_code
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy.colors import Color

        # Countdown configuration
        countdown_holes = list(range(8))  # inner holes (8-20)
        countdown_current_index = len(countdown_holes)  # Start with all lights on
        countdown_last_update = None
        countdown_interval = 0.5  # Update every 0.5 seconds

        # Turn on all outer lights initially
        if countdown_current_index > 0:
            active_holes = countdown_holes[:countdown_current_index]
            countdown_led.setHoleLights(active_holes, Color('white'))
      Each Frame:
        # Check if it's time to update the countdown
        if countdown_last_update is None:
            countdown_last_update = t  # t is the routine timer

        if t - countdown_last_update >= countdown_interval:
            # Decrease the number of active lights
            countdown_current_index -= 1
            countdown_last_update = t

            if countdown_current_index > 0:
                # Turn on the remaining lights
                active_holes = countdown_holes[:countdown_current_index]
                countdown_led.setHoleLights(active_holes, Color('white'))
                # Turn off the rest
                inactive_holes = countdown_holes[countdown_current_index:]
                countdown_led.turnOffHoleLights(inactive_holes)
            else:
                # All lights off
                countdown_led.turnOffHoleLights('outer')
                continueRoutine = False
    TextComponent countdown_text
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text [set every frame] = $countdown_current_index
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  Routine mvc
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    ApparatusLEDComponent led_mvc plugin="psychopy-apparatus"
      deviceLabel = apparatus
      holeColor = white
      holes = 'all'
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      syncScreenRefresh = False
      turnOffOnRoutineEnd = True
      turnOffOnStop = True
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    ApparatusForceComponent apparatusForce plugin="psychopy-apparatus"
      device = white
      deviceLabel = apparatus
      endRoutineOnResponse = False
      rate = 50
      rawDataId = "test"
      saveRawData = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        mvc_max_experimental = 0
      Begin Routine:
        mvc_max_trial = 0
      Each Frame:
        if apparatusForce.maxWhiteForce > mvc_max_trial:
            mvc_max_trial = apparatusForce.maxWhiteForce

        if mvc_trial_type == "experimental":
            if mvc_max_trial > mvc_max_experimental:
                mvc_max_experimental = mvc_max_trial
      End Routine:
        print(f"Maximum force across all experimental trials: {mvc_max_experimental}")
    KeyboardComponent mvc_keyboard
      allowedKeys = 'y','n','left','right','space'
      durationEstim = 45
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = mvc_trial_duration
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 45
      text [set every frame] = $f"Trial Type: {mvc_trial_type}\n\nForce: {apparatusForce.whiteForce}\n\nMax Experimental: {mvc_max_experimental}"
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  Routine target_presentation
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    ApparatusLEDComponent targetLED plugin="psychopy-apparatus"
      holes = 'none'
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      syncScreenRefresh = False
      turnOffOnRoutineEnd = True
      turnOffOnStop = True
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    CodeComponent ColorCode
      Code Type = Py
      Begin Experiment:
        from psychopy.colors import Color

        # define amount of palettes and reps per domain
        NUM_PALETTES = 24
        NUM_TARGETS_PER_REP = 4
      Begin Routine:
        # index auf 0 setzen
        index = 0
        # Target Color configuration
        holes = list(range(8))  # inner holes (0-7)

        #set up which trials show a target
        targetPresentTrials = random.sample(range(NUM_PALETTES), NUM_TARGETS_PER_REP)
        currentTrial = 0

        # Reset hits/misses/fa/cr for dprime calculation later in slider Routine
        hits = 0
        misses = 0
        false_alarms = 0
        correct_rejections = 0
      Each Frame:
        # timing in each frame:
        # t = Zeit seit Beginn der Routine (in Sekunden)
        if t < 2.0:
            # LEDs AN
            targetLED.setHoleLights(holes, Color(eval(targetColor), 'rgb255'))
        else:
            # LEDs AUS
            targetLED.turnOffAllLights()
      End Routine:
        targetLED.turnOffAllLights()
    ApparatusForceComponent practiceForce plugin="psychopy-apparatus"
      device = white
      endRoutineOnResponse = False
      rate = 50
      rawDataId = practiceForce
      saveRawData = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      syncScreenRefresh = False
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    CodeComponent audioPracticeCode
      Code Type = Py
      Begin Routine:
        # Begin Routine
        with _state_lock:
            _target_amp = 0.0   # definiert stumm
        # Begin Routine
        toneState = 0
        _lastSwitchT = -1e9   # erlaubt sofortigen Wechsel

        maxForce = mvc_max_experimental
        currentMVCLevel = mvcLevel
        targetForce = currentMVCLevel * maxForce

        tolerance = 15.0
        lower_threshold = targetForce - tolerance
        upper_threshold = targetForce + tolerance

        #print("Upper threshold set:", upper_threshold)
        #print("lower threshold set:", lower_threshold)
        targetColorText = f"Target color is: {targetColor}"
        mvcLevelText = f"Target MVC Level is: {currentMVCLevel:.2f}"

        #print("MVC level:", currentMVCLevel)
      Each Frame:
        tNow = t   # t = Zeit seit Routinenstart (automatisch verfügbar)

        if practiceForce.whiteForce is not None:

            # propose next state (ONLY upper threshold)
            if practiceForce.whiteForce > upper_threshold:
                proposed = 2   # high tone
            elif practiceForce.whiteForce < lower_threshold:
                proposed = 1   # zu niedrig
            else:
                proposed = 0   # mute

            # anti-chatter logic
            if proposed != toneState and (tNow - _lastSwitchT) >= stateHold:
                toneState = proposed
                _lastSwitchT = tNow

                # apply state
                if toneState == 2:
                    freq, amp = 880.0, AMP_MAX
                elif toneState == 1:
                    freq, amp = 440.0, AMP_MAX
                else:
                    freq, amp = 0.0, 0.0  # muted

                with _state_lock:
                    _target_freq = freq
                    _target_amp  = amp
        else:
            print("Force is None!")
        # debugging for forces
        #print("force:", force, "upper_threshold:", upper_threshold)
    TextComponent targetText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $f"Color: {targetColor}, Force: {practiceForce.whiteForce}"
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  Routine task
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    ApparatusReedComponent taskReed plugin="psychopy-apparatus"
      endRoutineOnResponse = False
      holes = 'all'
      rate = 100
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.416
      syncScreenRefresh = False
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    ApparatusLEDComponent taskLED plugin="psychopy-apparatus"
      holeColor = black
      holes = 'none'
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.416
      syncScreenRefresh = False
      turnOffOnRoutineEnd = True
      turnOffOnStop = True
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    CodeComponent distractorSamplingCode
      Code Type = Py
      Begin Experiment:
        stimulus = 0.416
        N_DISTRACTORS = 8

        INNER_RING_HOLES = list(range(0, 8))
        OUTER_RING_HOLES = list(range(9, 21))
      Begin Routine:
        target = Color(eval(targetColor), 'rgb255')
        # Setup stimulus
        # Parameters for a cognitive task trial:
        # targetColor
        # deltaE
        candidateHoles = random.sample(range(0, 8), N_DISTRACTORS)
        innerColors = {i: Color([0, 0, 0], 'rgb255') for i in range(0, 8)}

        # Calculate distractor colors
        #deltaE = currentDeltaE
        targetColorNorm = (target.rgb255[0] / 255, target.rgb255[1] / 255, target.rgb255[2] / 255)
        generatedDistractors = generate_distractors(targetColorNorm, int(deltaE), N_DISTRACTORS)

        # Convert distractors from 0-1 to 0-255
        distractorColors = {}
        for i in range(N_DISTRACTORS):
            hole = candidateHoles[i]
            gen = generatedDistractors[i]
            distractorColors[hole] = Color([int(gen[0] * 255), int(gen[1] * 255), int(gen[2] * 255)], 'rgb255')

        # Determine if the current trial should present a target and set the target color if so
        targetPresent = currentTrial in targetPresentTrials
        if targetPresent:
            targetHole = random.choice(candidateHoles)
            distractorColors[targetHole] = target
            currentLoop.addData('targetPresent', True)
            currentLoop.addData('targetHole', targetHole)
        else:
            targetHole = None
            currentLoop.addData('targetPresent', False)
            currentLoop.addData('targetHole', None)
      Each Frame:
        # timing in each frame:
        # t ist die Zeit seit Beginn der Routine (in Sekunden)
        if t < 0.417:
            # LEDs AN
            innerColors.update(distractorColors)
            taskLED.setColors(innerColors)
        else:
            # LEDs AUS
            taskLED.turnOffAllLights()

        # Reedkontakte auslesen (paletteweise, robust gegen mehrere Antworten)
        taskReed.updateReedMeasurement()
        for hole in taskReed.reedNewInsertions:
            paletteResponses.add(hole)
            paletteResponseEvents.append((t, hole))
        paletteResponses.update(taskReed.reedActiveHoles)

        has_target = targetHole is not None
        has_response = len(paletteResponses) > 0

        hit = int(has_target and targetHole in paletteResponses)
        fa = int((not has_target and has_response) or (has_target and any(h != targetHole for h in paletteResponses)))
        miss = int(has_target and targetHole not in paletteResponses)
        cr = int((not has_target) and not has_response)
      End Routine:
        # Index um eins hochzählen, damit richtige Palette angezeigt wird
        index += 1
        currentTrial += 1

        # Hochzählen der hits, fa, cr & misses
        if hit:
            hits += 1
        if miss:
            misses += 1
        if fa:
            false_alarms += 1
        if cr:
            correct_rejections += 1

        #Daten anhängen
        paletteResponseList = sorted(paletteResponses)
        currentLoop.addData('paletteResponseCount', len(paletteResponseList))
        currentLoop.addData('paletteResponses', paletteResponseList)
        currentLoop.addData('paletteResponseEvents', paletteResponseEvents)
        currentLoop.addData('hit', hit)
        currentLoop.addData('falsealarm', fa)
        currentLoop.addData('correct rejection', cr)
        currentLoop.addData('miss', miss)
    TextComponent taskText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.416
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      text [set every repeat]:
        $f"Palette: {index}, deltaE: {deltaE}, Kraftlevel: {mvcLevel}"
    CodeComponent taskReedCode
      Code Type = Py
      Begin Routine:
        paletteResponses = set()
        paletteResponseEvents = []
    ApparatusForceComponent taskForce plugin="psychopy-apparatus"
      device = white
      endRoutineOnResponse = False
      rate = 50
      rawDataId = taskForce
      saveRawData = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.416
      syncScreenRefresh = False
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    CodeComponent audioCode
      Code Type = Py
      Begin Routine:
        # Begin Routine
        with _state_lock:
            _target_amp = 0.0   # definiert stumm
        # Begin Routine
        toneState = 0
        _lastSwitchT = -1e9   # erlaubt sofortigen Wechsel

        maxForce = mvc_max_experimental
        currentMVCLevel = mvcLevel
        targetForce = currentMVCLevel * maxForce

        tolerance = 15.0
        lower_threshold = targetForce - tolerance
        upper_threshold = targetForce + tolerance

        #print("Upper threshold set:", upper_threshold)
        #print("lower threshold set:", lower_threshold)
        targetColorText = f"Target color is: {targetColor}"
        mvcLevelText = f"Target MVC Level is: {currentMVCLevel:.2f}"

        #print("MVC level:", currentMVCLevel)
      Each Frame:
        tNow = t   # t = Zeit seit Routinenstart (automatisch verfügbar)

        if taskForce.whiteForce is not None:

            # propose next state (ONLY upper threshold)
            if taskForce.whiteForce > upper_threshold:
                proposed = 2   # high tone
            elif taskForce.whiteForce < lower_threshold:
                proposed = 1   # zu niedrig
            else:
                proposed = 0   # mute

            # anti-chatter logic
            if proposed != toneState and (tNow - _lastSwitchT) >= stateHold:
                toneState = proposed
                _lastSwitchT = tNow

                # apply state
                if toneState == 2:
                    freq, amp = 880.0, AMP_MAX
                elif toneState == 1:
                    freq, amp = 440.0, AMP_MAX
                else:
                    freq, amp = 0.0, 0.0  # muted

                with _state_lock:
                    _target_freq = freq
                    _target_amp  = amp
        else:
            print("Force is None!")
        # debugging for forces
        #print("force:", force, "upper_threshold:", upper_threshold)
  Routine slider
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    SliderComponent EffortRating
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = (0,1,2,3,4,5,6,7,8,9,10)
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,1,2,3,4,5,6,7,8,9,10)
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    TextComponent sliderText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"{sliderResponse} Effort"
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    KeyboardComponent keyRespSlider
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine setup
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    CodeComponent colorCode
      Code Type = Py
      Before Experiment:
        import random
        import math

        def rgb_to_lab(rgb):
            """
            Convert color from RGB to CIELAB space.

            Parameters
            ----------
            c: tuple
                A tuple of three floats representing the RGB color (each in range 0-1).
            """
            def pivot_rgb(c):
                return ((c + 0.055)/1.055)**2.4 if c > 0.04045 else c/12.92

            R, G, B = [pivot_rgb(v) for v in rgb]

            X = 0.4124564*R + 0.3575761*G + 0.1804375*B
            Y = 0.2126729*R + 0.7151522*G + 0.0721750*B
            Z = 0.0193339*R + 0.1191920*G + 0.9503041*B

            X /= 0.95047
            Z /= 1.08883

            def f(t):
                return t**(1/3) if t > 0.008856 else (7.787*t + 16/116)

            L = 116 * f(Y) - 16
            a = 500 * (f(X) - f(Y))
            b = 200 * (f(Y) - f(Z))

            return (L, a, b)

        def delta_e2000(lab1, lab2):
            """
            Calculate the Delta E 2000 color difference between two CIELAB colors.

            Parameters
            ----------
            lab1 : tuple
                A tuple of three floats representing the first CIELAB color (L, a, b).
            lab2 : tuple
                A tuple of three floats representing the second CIELAB color (L, a, b).
            """
            L1, a1, b1 = lab1
            L2, a2, b2 = lab2

            avg_L = (L1 + L2) / 2
            C1 = math.sqrt(a1*a1 + b1*b1)
            C2 = math.sqrt(a2*a2 + b2*b2)
            avg_C = (C1 + C2) / 2

            G = 0.5 * (1 - math.sqrt((avg_C**7)/((avg_C**7) + (25**7))))
            a1p = a1 * (1 + G)
            a2p = a2 * (1 + G)

            C1p = math.sqrt(a1p*a1p + b1*b1)
            C2p = math.sqrt(a2p*a2p + b2*b2)
            avg_Cp = (C1p + C2p) / 2

            h1p = (math.degrees(math.atan2(b1, a1p)) + 360) % 360
            h2p = (math.degrees(math.atan2(b2, a2p)) + 360) % 360

            dhp = h2p - h1p
            if abs(dhp) > 180:
                dhp -= 360 * math.copysign(1, dhp)
            dHp = 2 * math.sqrt(C1p*C2p) * math.sin(math.radians(dhp/2))

            avg_hp = (h1p + dhp/2) % 360

            T = 1 - 0.17*math.cos(math.radians(avg_hp - 30)) \
                  + 0.24*math.cos(math.radians(2*avg_hp)) \
                  + 0.32*math.cos(math.radians(3*avg_hp + 6)) \
                  - 0.20*math.cos(math.radians(4*avg_hp - 63))

            Sl = 1 + (0.015*((avg_L - 50)**2)) / math.sqrt(20 + (avg_L - 50)**2)
            Sc = 1 + 0.045 * avg_Cp
            Sh = 1 + 0.015 * avg_Cp * T

            Rt = -2 * math.sqrt((avg_Cp**7)/((avg_Cp**7)+(25**7))) * \
                 math.sin(math.radians(60 * math.exp(-(((avg_hp - 275)/25)**2))))

            dE = math.sqrt(
                (L2-L1)**2 / (Sl**2) +
                (C2p-C1p)**2 / (Sc**2) +
                (dHp)**2 / (Sh**2) +
                Rt * (C2p-C1p)/Sc * dHp/Sh
            )
            return dE

        def generate_distractors(target_rgb, deltaE_mid, n):
            """
            Generate n distractor colors in RGB space that are approximately deltaE_mid away from the target_rgb color.

            Parameters
            ----------
            target_rgb : tuple
                A tuple of three floats representing the target RGB color (each in range 0-1).
            deltaE_mid : float
                The target Delta E 2000 distance from the target color.
            n : int
                The number of distractor colors to generate.
            """
            target_lab = rgb_to_lab(target_rgb)

            distractors = []
            attempts = 0

            while len(distractors) < n and attempts < 50000:
                attempts += 1

                # random RGB candidate
                rgb = (random.random(), random.random(), random.random())
                lab = rgb_to_lab(rgb)
                dE = delta_e2000(target_lab, lab)

                if abs(dE - deltaE_mid) <= 1.5:  # Bandbreite 3
                    distractors.append(rgb)

            if len(distractors) < n:
                print("WARNUNG: nicht genug Farben im DeltaE-Band gefunden.")
                # auffüllen mit Zufallsfarben
                while len(distractors) < n:
                    distractors.append((random.random(),random.random(),random.random()))

            return distractors
    CodeComponent soundCode
      Code Type = Py
      Begin Experiment:
        global _state_lock, _target_freq, _target_amp, _cur_amp, _phase, _stream
        global proposed, toneState, _lastSwitchT

        import numpy as np
        import sounddevice as sd
        import threading


        # Ton SetUp
        FS = 48000
        CHANNELS = 1



        # Tone control (shared)
        _state_lock = threading.Lock()
        _target_freq = 440.0
        _target_amp  = 0.0      # start muted
        _cur_amp     = 0.0
        _phase       = 0.0

        AMP_MAX = 1.0          # overall loudness
        AMP_SMOOTH = 0.1      # 0..1, higher = faster fade (avoids clicks)

        # Anti-chatter for threshold switching ---
        proposed = 0
        toneState = 0          # 0=mute, 1=440, 2=880
        stateHold = 0.1       # seconds: minimum time before state can change again
        _lastSwitchT = 0

        def audio_callback(outdata, frames, time, status):
            global _phase, _cur_amp, _target_amp, _target_freq
            # read target state thread-safely
            with _state_lock:
                tf = float(_target_freq)
                ta = float(_target_amp)

            # smooth amplitude to avoid clicks on on/off
            _cur_amp = (1.0 - AMP_SMOOTH) * _cur_amp + AMP_SMOOTH * ta

            # generate sine (even if muted; fine and simple)
            t = (np.arange(frames) / FS).astype(np.float32)
            phase_inc = 2.0 * np.pi * tf
            y = np.sin(_phase + phase_inc * t).astype(np.float32)

            # advance phase
            _phase = float((_phase + phase_inc * (frames / FS)) % (2.0 * np.pi))

            outdata[:] = (_cur_amp * y).reshape(-1, 1)

        _stream = sd.OutputStream(
            samplerate=FS,
            channels=CHANNELS,
            dtype="float32",
            callback=audio_callback,
        )
        if not _stream.active:
            _stream.start()
  Routine blockBreak
    RoutineSettingsComponent blockBreak
      disabled = True
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    TextComponent blockBreakText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 45
      text = 45s Pause
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  Routine domainBreak
    RoutineSettingsComponent domainBreak
      disabled = True
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    KeyboardComponent keyRespDomainBreak
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 120.0
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    TextComponent domainBreakText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        2min Pause
        mit Drücken auf Leertaste dann weiter
  Routine forceRoutine
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    ApparatusForceComponent forceRoutineForce plugin="psychopy-apparatus"
      device = white
      endRoutineOnResponse = False
      rate = 10
      rawDataId = "rest"
      saveRawData = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      syncScreenRefresh = False
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    TextComponent textForce
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every frame] = $f" Force: {forceRoutineForce.WhiteForce}"
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    CodeComponent forceCode_2
      Code Type = Py
      Begin Experiment:
        #mvc_max_trial
        # mvc Level
        #forceThreshold = mvc_max_trial * mvcLevel
  Routine postTask
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    TextComponent dprimeText
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text [set every frame]:
        $'Last dprime: ' + str(dprime) + '\n'
        'Hits: ' + str(hits) + '\n'
        'Misses: ' + str(misses) + '\n'
        'False alarms: ' + str(false_alarms) + '\n'
        'Correct rejections: ' + str(correct_rejections) + '\n'
    CodeComponent dprimeCode
      Code Type = Py
      Begin Experiment:
        from scipy.stats import norm
      Begin Routine:
        #dprime Calculation
        H = hits + misses
        F = false_alarms + correct_rejections

        hit_rate = (hits+0.5)/(H+1) if H>0 else 0.5
        fa_rate = (false_alarms+0.5)/(F+1) if F>0 else 0.5
        dprime = norm.ppf(hit_rate) - norm.ppf(fa_rate)

        currentLoop.addData('dprime', dprime)
    KeyboardComponent dprimeKeyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine targetColorBalance
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    CodeComponent targetBalanceCognitive
      Code Type = Py
      Before Experiment:
        import random
        import numpy as np
        # from scipy.stats import truncnorm, nur bei truncated normal distribution

        NUM_REPS = 6 # Number of repetitions = Anzahl Durchgaenge per unique delatE value
        nTrials = 12 # number of total repetitions
        NUM_PALETTES = 24       # Number of palettes per repetition = Anzahl Paletten pro Durchgang
        NUM_TARGETS_PER_REP = 4 # How many palettes have a target present in a single repetition
        DELTA_E_MIN = 10
        DELTA_E_MAX = 60
        deltaEPhysical = 70
        mvcCognitive = 0.03
      Begin Routine:
        import random
        import numpy as np
        from psychopy.colors import Color

        if domain == 'physical':
            deltaELevels = np.linspace(DELTA_E_MIN, DELTA_E_MAX, 6).tolist()
            n_blocks = 3

            deltaE_order_per_block = {}

            for block in range(n_blocks):
                levels = deltaELevels.copy()
                random.shuffle(levels)
                deltaE_order_per_block[block] = levels

            targetColors = [
                Color([255, 0, 0], 'rgb255'),
                Color([0, 255, 0], 'rgb255'),
                Color([0, 0, 255], 'rgb255')
            ]

            deltaE_color_map = {}

            for dE in deltaELevels:
                shuffled_colors = random.sample(targetColors, n_blocks)
                deltaE_color_map[dE] = {
                    block: shuffled_colors[block]
                    for block in range(n_blocks)
                }


            print("\n===== DELTAE DESIGN CHECK =====")
            for block in range(n_blocks):
                print(f"\nBlock {block+1} order:")
                for dE in deltaE_order_per_block[block]:
                    print(
                        f"  DeltaE {dE:.3f} -> "
                        f"Color {deltaE_color_map[dE][block]}"
                    )
            print("================================\n")
            deltaE = 70
        else:


            # -----------------------------
            # 1) MVC-Level definieren
            # -----------------------------
            mvcLevels = np.linspace(0.1, 0.4, 6).tolist()
            n_blocks = 3

            # -----------------------------
            # 2) MVC-Reihenfolge PRO BLOCK
            # mvc_order_per_block[block][trial] -> mvcLevel
            # -----------------------------
            mvc_order_per_block = {}

            for block in range(n_blocks):
                levels = mvcLevels.copy()
                random.shuffle(levels)
                mvc_order_per_block[block] = levels

            # -----------------------------
            # 3) Target-Farben definieren
            # -----------------------------
            targetColors = [
                Color([255, 0, 0], 'rgb255'),
                Color([0, 255, 0], 'rgb255'),
                Color([0, 0, 255], 'rgb255')
            ]

            # -----------------------------
            # 4) MVC × Block → Farbe
            # color_map[mvcLevel][block] -> Farbe
            # -----------------------------
            color_map = {}

            for lvl in mvcLevels:
                shuffled_colors = random.sample(targetColors, n_blocks)
                color_map[lvl] = {
                    block: shuffled_colors[block]
                    for block in range(n_blocks)
                }

            # -----------------------------
            # 5) DEBUG: vollständiger Design-Check
            # -----------------------------
            print("\n===== PHYSICAL TASK DESIGN CHECK =====")

            for block in range(n_blocks):
                print(f"\nBlock {block + 1} order:")
                for lvl in mvc_order_per_block[block]:
                    print(
                        f"  MVC {lvl:.3f} -> "
                        f"Color {color_map[lvl][block]}"
                    )

            print("======================================\n")
            mvcLevel = 0.03
Flow
  Routine setup
  LoopInitiator loop_mvc_block loopType="TrialHandler"
    conditionsFile = mvc_block.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'mvc_trial_type': 'practice', 'mvc_trial_nrepeat': 1, 'mvc_trial_duration': 450},
      {'mvc_trial_type': 'experimental', 'mvc_trial_nrepeat': 3, 'mvc_trial_duration': 45}]
    LoopInitiator loop_mvc_trial loopType="TrialHandler"
      loopType = sequential
      nReps = mvc_trial_nrepeat
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      conditions:
        [{'mvc_trial_nrepeat': 1, 'mvc_trial_duration': None},
        {'mvc_trial_nrepeat': 3, 'mvc_trial_duration': 45}]
      Routine countdown
      Routine mvc
    LoopTerminator loop_mvc_trial
  LoopTerminator loop_mvc_block
  LoopInitiator domainLoop loopType="TrialHandler"
    conditionsFile = domainLoop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'domain': 'physical'},
      {'domain': 'cognitive'}]
    Routine targetColorBalance
    LoopInitiator blockLoop loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine countdown
      LoopInitiator levelLoop loopType="TrialHandler"
        loopType = random
        nReps = 6
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        conditions:
          [{'deltaE': 10, 'mvcLevel': 0.1, 'targetColor': '0,0,255'},
          {'deltaE': 10, 'mvcLevel': 0.1, 'targetColor': '255,0,0'},
          {'deltaE': 10, 'mvcLevel': 0.1, 'targetColor': '0,255,0'},
          {'deltaE': 20, 'mvcLevel': 0.16, 'targetColor': '0,0,255'},
          {'deltaE': 20, 'mvcLevel': 0.16, 'targetColor': '255,0,0'},
          {'deltaE': 20, 'mvcLevel': 0.16, 'targetColor': '0,255,0'},
          {'deltaE': 30, 'mvcLevel': 0.22, 'targetColor': '0,0,255'},
          {'deltaE': 30, 'mvcLevel': 0.22, 'targetColor': '255,0,0'},
          {'deltaE': 30, 'mvcLevel': 0.22, 'targetColor': '0,255,0'},
          {'deltaE': 40, 'mvcLevel': 0.28, 'targetColor': '0,0,255'},
          {'deltaE': 40, 'mvcLevel': 0.28, 'targetColor': '255,0,0'},
          {'deltaE': 40, 'mvcLevel': 0.28, 'targetColor': '0,255,0'},
          {'deltaE': 50, 'mvcLevel': 0.34, 'targetColor': '0,0,255'},
          {'deltaE': 50, 'mvcLevel': 0.34, 'targetColor': '255,0,0'},
          {'deltaE': 50, 'mvcLevel': 0.34, 'targetColor': '0,255,0'},
          {'deltaE': 60, 'mvcLevel': 0.4, 'targetColor': '0,0,255'},
          {'deltaE': 60, 'mvcLevel': 0.4, 'targetColor': '255,0,0'},
          {'deltaE': 60, 'mvcLevel': 0.4, 'targetColor': '0,255,0'}]
        Routine target_presentation
        LoopInitiator paletteLoop loopType="TrialHandler"
          loopType = random
          nReps = 10
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          Routine task
        LoopTerminator paletteLoop
        Routine postTask
        LoopInitiator sliderLoop loopType="TrialHandler"
          conditionsFile = sliderResponse.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [{'sliderResponse': 'cognitive'},
            {'sliderResponse': 'physical'}]
          Routine slider
        LoopTerminator sliderLoop
      LoopTerminator levelLoop
      Routine blockBreak
    LoopTerminator blockLoop
    Routine domainBreak
  LoopTerminator domainLoop
