PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = maxForce
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine countdown
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    ApparatusLEDComponent countdown_led plugin="psychopy-apparatus"
      deviceLabel = apparatus
      disabled = True
      holeColor = black
      holes = 'none'
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      syncScreenRefresh = False
      turnOffOnRoutineEnd = False
      turnOffOnStop = False
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    CodeComponent countdown_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        from psychopy.colors import Color

        num_holes = 20  # Number of LEDs/holes
        led_update_interval = 0.1  # seconds
        led_last_update = 0
        color_list = [Color('red'), Color('green'), Color('blue')]
        color_index = 0
      Each Frame:
        if t - led_last_update >= led_update_interval:
            current_color = color_list[color_index]
            countdown_led.setHoleLights(list(range(num_holes)), current_color)
            color_index = (color_index + 1) % len(color_list)
            led_last_update = t
    ApparatusForceComponent apparatusForce_2 plugin="psychopy-apparatus"
      device = both
      deviceLabel = apparatus
      endRoutineOnResponse = False
      rate = 100
      rawDataId = "test"
      saveRawData = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      syncScreenRefresh = False
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    ApparatusReedComponent apparatusReed plugin="psychopy-apparatus"
      deviceLabel = apparatus
      disabled = True
      endRoutineOnResponse = False
      holes = 'all'
      rate = 100
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      syncScreenRefresh = False
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Flow
  Routine countdown
