PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  expName = performance-test
  keyboardBackend = PsychToolbox
  runMode = True
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Routines
  Routine countdown
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    ApparatusLEDComponent countdown_led plugin="psychopy-apparatus"
      deviceLabel = apparatus
      holeColor = black
      holes = 'none'
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      syncScreenRefresh = False
      turnOffOnRoutineEnd = True
      turnOffOnStop = True
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    CodeComponent countdown_code
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy.colors import Color

        num_holes = 20  # Number of LEDs/holes
        led_update_interval = 0.1  # seconds
        led_last_update = 0
        color_list = [Color('red'), Color('green'), Color('blue')]
        led_step = 0  # global rotation step
      Each Frame:
        if t - led_last_update >= led_update_interval:
            per_hole_colors = {
                i: color_list[(led_step + i) % len(color_list)]
                for i in range(num_holes)
            }
            countdown_led.setColors(per_hole_colors)
            led_step = (led_step + 1) % len(color_list)
            led_last_update = t
    ApparatusForceComponent apparatusForce_2 plugin="psychopy-apparatus"
      device = white
      deviceLabel = apparatus
      endRoutineOnResponse = False
      rate = 100
      rawDataId = "test"
      saveRawData = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      syncScreenRefresh = False
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    ApparatusReedComponent apparatusReed plugin="psychopy-apparatus"
      deviceLabel = apparatus
      endRoutineOnResponse = False
      holes = 'all'
      rate = 100
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      syncScreenRefresh = False
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Flow
  LoopInitiator trials loopType="TrialHandler"
    endPoints = [0,1]
    loopType = random
    nReps = 10
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    Routine countdown
  LoopTerminator trials
